OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Signal stream -> Identity => #3
Simulated data => #4
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Clock stimulator => #5
  Interstimulation interval (in sec) = 1
  Stimulation = OVTK_StimulationId_ExperimentStop
Input signal=#4, Input stimulations=#5 -> LSL Export (sends all stim)
  Stream name = type
  Stream type = EEG
#5 -> Stimulation listener
  Log level to use = Information
Data=#3, Stimulations=#5 -> Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
