OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Signal stream -> Channel Selector "C3" => #3
  Channel List = C3
  Action = Select
  Channel Matching Method = Smart
Lua Stimulator => #4
  Lua Script = ${__volatile_ScenarioDir}/lua_files/0_2_testUnityConnexion.lua
-> Stimulation listener
  Log level to use = Information
#4 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input signal=#3, Input stimulations=#4 -> Export signal Unity
  Stream name = type
  Stream type = EEG
