OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Signal stream -> Channel Selector "FC5; CP1; C3; FC1; CP5"
  Channel List = FC5; CP1; C3; FC1; CP5
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3" => #4
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
Baseline - Rest with eyes Opened => #5
  Lua Script = ${__volatile_ScenarioDir}/lua_files/1_restingState.lua
  baseline duration = 60
  duree_instruction = 3
-> Stimulation listener
  Log level to use = Information
#5 -> Player Controller "stopExperiment_recording"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#5 -> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${__volatile_ScenarioDir}/images/cross.png
  Stimulation 1 = OVTK_StimulationId_VisualStimulationStart
  Cue Image 2 = ${__volatile_ScenarioDir}/images/instruction_repos.png
  Stimulation 2 = OVTK_StimulationId_Label_0D
Input stream 1=#2.Experiment information, Input stream 2=#2.Signal stream, Input stream 3=#5, Input stream 4=#2.Stimulations -> Generic stream writer
  Filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/1_restingState_[$core{date}].ov
  Use compression = false
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "baseline epoching"
  Epoch duration (in sec) = 50
  Epoch offset (in sec) = 5
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
-> Time based epoching "1s epoch with 0.75s overlap" => #11
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "13-20Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #14
mediane=#14, Stimulations stream=#2.Stimulations -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/rest_low.csv
  Precision = 3
  Append data = false
  Only last matrix = false
#11 -> Temporal filter "21-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 21
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #18
mediane=#18, Stimulations stream=#2.Stimulations -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/rest_high.csv
  Precision = 3
  Append data = false
  Only last matrix = false
Simulated data => #20
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input signal=#20, Input stimulations=#5 -> LSL Export to Arduino (sends all stim)
  Stream name = type
  Stream type = EEG
