OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "FC1; FC2; Cz; CP2; CP1"
  Channel List = FC1; FC2; Cz; CP2; CP1
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian Cz vert" => #2
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Channel Selector "FC5; CP1; C3; FC1; CP5"
  Channel List = FC5; CP1; C3; FC1; CP5
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3 vert" => #5
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
Data=#5 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
MI_training_stimulator => #7
  Lua Script = ${__volatile_ScenarioDir}/lua_files/2_motorImageryTraining.lua
  baseline_duration = 3
  instruction_duration = 3
Streamed matrix=#0.Signal stream, Input stimulation channel=#7 -> BrainVision Format file writer (Gipsa)
  Header filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/2_motorImageryTraining_[$core{date}].vhdr
  Binary format = INT_16
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#7, Input stream 4=#0.Stimulations -> Generic stream writer
  Filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/2_motorImageryTraining_[$core{date}].ov
  Use compression = false
#7 -> Stimulation listener
  Log level to use = Information
#7 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input signal=#2, Input stimulations=#7 -> Stimulation based epoching "exec epoch"
  Epoch duration (in sec) = 24
  Epoch offset (in sec) = 3
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "21-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 21
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #16
mediane=#16, Stimulations stream=#7 -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/exec_high.csv
  Precision = 3
  Append data = false
  Only last matrix = false
Input signal=#2, Input stimulations=#7 -> Stimulation based epoching "MI epoch"
  Epoch duration (in sec) = 24
  Epoch offset (in sec) = 3
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "21-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 21
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #22
mediane=#22, Stimulations stream=#7 -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/MI_high.csv
  Precision = 3
  Append data = false
  Only last matrix = false
Input signal=#2, Input stimulations=#7 -> Stimulation based epoching "obs epoch"
  Epoch duration (in sec) = 24
  Epoch offset (in sec) = 3
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "21-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 21
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #28
mediane=#28, Stimulations stream=#7 -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/obs_high.csv
  Precision = 3
  Append data = false
  Only last matrix = false
Input signal=#5, Input stimulations=#7 -> Stimulation based epoching "obs epoch"
  Epoch duration (in sec) = 24
  Epoch offset (in sec) = 3
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "13-20Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #34
-> Matrix Display "mediane baseline"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
mediane=#34, Stimulations stream=#7 -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/obs_low.csv
  Precision = 3
  Append data = false
  Only last matrix = false
Input signal=#5, Input stimulations=#7 -> Stimulation based epoching "exec epoch"
  Epoch duration (in sec) = 24
  Epoch offset (in sec) = 3
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "13-20Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #41
mediane=#41, Stimulations stream=#7 -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/exec_low.csv
  Precision = 3
  Append data = false
  Only last matrix = false
Input signal=#5, Input stimulations=#7 -> Stimulation based epoching "MI epoch"
  Epoch duration (in sec) = 24
  Epoch offset (in sec) = 3
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "13-20Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #47
mediane=#47, Stimulations stream=#7 -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/MI_low.csv
  Precision = 3
  Append data = false
  Only last matrix = false
Simulated data => #49
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input signal=#49, Input stimulations=#7 -> LSL Export to Arduino (sends all stim)
  Stream name = TRIGGER
  Stream type = type2
Input signal=#49, Input stimulations=#7 -> Export signal Unity
  Stream name = type
  Stream type = EEG

LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"
