OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  <== noms des tableurs en sortie pas homogenes +
  modifier le fichier python qui les lit avec les bons noms de tableurs

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "FC5; CP1; C3; FC1; CP5"
  Channel List = FC5; CP1; C3; FC1; CP5
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3 vert" => #2
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
#0.Signal stream -> Channel Selector "FC1; FC2; Cz; CP2; CP1"
  Channel List = FC1; FC2; Cz; CP2; CP1
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian Cz vert" => #4
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
#0.Stimulations -> Identity => #5
Lua Stimulator => #6
  Lua Script = ${__volatile_ScenarioDir}/lua_files/3_thresholdDetermination.lua
  baseline_start_duration = 90
  instruction_duration = 3
Streamed matrix=#0.Signal stream, Input stimulation channel=#6 -> BrainVision Format file writer (Gipsa)
  Header filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/3_thresholdDetermination_high_[$core{date}].vhdr
  Binary format = INT_16
#6 -> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${__volatile_ScenarioDir}/images/cross.png
  Stimulation 1 = OVTK_StimulationId_VisualStimulationStart
  Cue Image 2 = ${__volatile_ScenarioDir}/images/instruction_repos.png
  Stimulation 2 = OVTK_StimulationId_Label_0D
#6 -> Stimulation listener
  Log level to use = Information
#6 -> Player Controller "stopExperiment_recording"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#6 -> 0x341d3912 Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${__volatile_ScenarioDir}/images/cross.png
  Stimulation 1 = OVTK_StimulationId_VisualStimulationStart
  Cue Image 2 = ${__volatile_ScenarioDir}/images/ObserverF9E5D4.png
  Stimulation 2 = OVTK_StimulationId_Label_0A
  Cue Image 3 = ${__volatile_ScenarioDir}/images/Imiter.png
  Stimulation 3 = OVTK_StimulationId_Label_0B
  Cue Image 4 = ${__volatile_ScenarioDir}/images/Imaginer.png
  Stimulation 4 = OVTK_StimulationId_Label_0C
Input stream 2=#0.Signal stream, Input stream 3=#6 -> Generic stream writer
  Filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/3_thresholdDetermination_high_[$core{date}].ov
  Use compression = false
#6 -> 0x341d3912 Run python threshold computation
  Stimulation 1 = OVTK_GDF_End_Of_Session
  Command 1 = "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/3_thresholdDetermination.py
Input stimulations=#6 -> LSL Export to Arduino (sends all stim)
  Stream name = type
  Stream type = EEG
Input signal=#4, Input stimulations=#6 -> Stimulation based epoching "baseline epoching"
  Epoch duration (in sec) = 50
  Epoch offset (in sec) = 5
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "21-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 21
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #19
mediane=#19, Stimulations stream=#5 -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/rest_target.csv
  Precision = 3
  Append data = false
  Only last matrix = false
Input signal=#2, Input stimulations=#6 -> Stimulation based epoching "baseline epoching"
  Epoch duration (in sec) = 50
  Epoch offset (in sec) = 5
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "13-20Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #25
mediane=#25, Stimulations stream=#5 -> CSV File Writer "mediane_fileWriter"
  Filename = ${__volatile_ScenarioDir}/../rawdata/csv_files/rest_parasite.csv
  Precision = 3
  Append data = false
  Only last matrix = false

LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"
