OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "C3" => #1
  Channel List = C3
  Action = Select
  Channel Matching Method = Smart
Streamed matrix=#0.Signal stream, Input stimulation channel=#0.Stimulations -> BrainVision Format file writer (Gipsa)
  Header filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/4_gonoGoTraining_[$core{date}].vhdr
  Binary format = INT_16
#0.Stimulations -> Stimulation listener
  Log level to use = Information
Maestro => #4
  Lua Script = ${__volatile_ScenarioDir}/lua_files/4_gonogoTraining.lua
  baseline duration = 3
  duree_instruction = 3
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input signal=#1, Input stimulations=#4 -> Export signal Unity
  Stream name = type
  Stream type = EEG
#4 -> Stimulation listener2
  Log level to use = Information

LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"
