OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

0x341d3912 LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> 0x341d3912 Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"

Lua Stimulator => #2
  Lua Script = ${__volatile_ScenarioDir}/lua_files/6_neurofeedbackGonoGo.lua
  pre_trial_baseline_duration = 3
  instruction_duration = 3
  nb of blocks = 3
  nb of trials per block = 3
  inter block duration = 60
  breakPostTrial min duration = 2
  breakPostTrial max duration = 4
  neurofeedback trial duration = 24
  initial FB wait duration = 1.5
-> Stimulation listener
  Log level to use = Information
#2 -> Player Controller "stopExperiment_recording"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#2 -> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${__volatile_ScenarioDir}/images/cross.png
  Stimulation 1 = OVTK_StimulationId_VisualStimulationStart
  Cue Image 2 = ${__volatile_ScenarioDir}/images/ObserverF9E5D4.png
  Stimulation 2 = OVTK_StimulationId_Label_0A
  Cue Image 3 = ${__volatile_ScenarioDir}/images/Imiter.png
  Stimulation 3 = OVTK_StimulationId_Label_0B
  Cue Image 4 = ${__volatile_ScenarioDir}/images/Imaginer.png
  Stimulation 4 = OVTK_StimulationId_Label_0C
  Cue Image 5 = ${__volatile_ScenarioDir}/images/remplir_questionnaire.png
  Stimulation 5 = OVTK_StimulationId_Label_1E
  Cue Image 6 = ${__volatile_ScenarioDir}/images/temp_FB_performance.png
  Stimulation 6 = OVTK_StimulationId_Label_1F
Acquisition client => #6
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Streamed matrix=#6.Signal stream, Input stimulation channel=#2 -> BrainVision Format file writer (Gipsa)
  Header filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/6_neurofeedbackHigh_gonogo_[$core{date}].vhdr
  Binary format = INT_16
Input stream 1=#6.Experiment information, Input stream 2=#6.Signal stream, Input stream 3=#2, Input stream 4=#6.Stimulations -> Generic stream writer
  Filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/6_neurofeedbackHigh_gonogo_[$core{date}].ov
  Use compression = false
#6.Signal stream -> Channel Selector "FC5; CP1; C3; FC1; CP5"
  Channel List = FC5; CP1; C3; FC1; CP5
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3 VERT"
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "13-20Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average PARASITE => #14
Input signal=#6.Signal stream, Input stimulations=#2 -> 0x341d3912 LSL Export to Arduino (sends all stim)
  Stream name = type
  Stream type = EEGArduino
#6.Signal stream -> Channel Selector "FC1; FC2; Cz; CP2; CP1"
  Channel List = FC1; FC2; Cz; CP2; CP1
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian Cz vert"
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "21-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 21
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average TARGET => #21
Input 1=#21, Input 2=#14 -> Signal Merger => #22
Data=#22 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#22, Input stimulations=#2 -> Export signal Unity
  Stream name = type
  Stream type = EEG
