OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

0x341d3912 LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> 0x341d3912 Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"

Baseline - Rest with eyes Opened => #2
  Lua Script = ${__volatile_ScenarioDir}/lua_files/1_restingState.lua
  baseline duration = 60
  duree_instruction = 3
-> Stimulation listener
  Log level to use = Information
#2 -> Player Controller "stopExperiment_recording"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#2 -> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${__volatile_ScenarioDir}/images/cross.png
  Stimulation 1 = OVTK_StimulationId_VisualStimulationStart
  Cue Image 2 = ${__volatile_ScenarioDir}/images/instruction_repos.png
  Stimulation 2 = OVTK_StimulationId_Label_0D
Acquisition client => #6
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Streamed matrix=#6.Signal stream, Input stimulation channel=#2 -> BrainVision Format file writer (Gipsa)
  Header filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/7_restingStatePost_[$core{date}].vhdr
  Binary format = INT_16
Input stream 1=#6.Experiment information, Input stream 2=#6.Signal stream, Input stream 3=#2, Input stream 4=#6.Stimulations -> Generic stream writer
  Filename = ${__volatile_ScenarioDir}/../rawdata/openvibe/7_restingStatePost_[$core{date}].ov
  Use compression = false
Simulated data => #9
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input signal=#9, Input stimulations=#2 -> LSL Export to Arduino (sends all stim)
  Stream name = type
  Stream type = EEG
