OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0x341d3912 Channel Selector "C3" => #1
  Channel List = C3
  Action = Select
  Channel Matching Method = Smart
Data=#1 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#3.Signal stream -> Channel Selector "FC5; CP1; C3; FC1; CP5"
  Channel List = FC5; CP1; C3; FC1; CP5
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3"
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "13-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #9
Maestro => #10
  Lua Script = ${__volatile_ScenarioDir}/lua_files/6b_gonogo.lua
  baseline duration = 3
  duree_instruction = 3
Input signal=#1, Input stimulations=#10 -> 0x341d3912 Export signal Unity
  Stream name = type2
  Stream type = EEG
EEG stream=#3.Signal stream, Stimulations=#10 -> 0x341d3912 BrainVision Format File Writer
  Filename (header in vhdr format) = GoNoGo.vhdr
  Marker to OV Stimulation dictionary =
  Convert OpenViBE Stimulations to markers = true
  Use full data and marker file names in header = false
Input signal=#9, Input stimulations=#10 -> Export signal Unity
  Stream name = type2
  Stream type = EEG
Streamed matrix=#3.Signal stream, Input stimulation channel=#10 -> BrainVision Format file writer (Gipsa)
  Header filename = ${__volatile_ScenarioDir}/../rawdata/gonog.vhdr
  Binary format = INT_16
#10 -> Stimulation listener
  Log level to use = Information
