OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = C:/Users/lilux/Desktop/Données/1_restingState_[2023.09.04-11.15.07].ov
#0.Output Signal -> Channel Selector "C2; AFz; Cz; CPz; C1"
  Channel List = C2; AFz; Cz; CPz; C1
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian Cz JAUNE"
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "21-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 21
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #6
#0.Output Signal -> Channel Selector "CP3; C5; C3; FC3; C1"
  Channel List = CP3; C5; C3; FC3; C1
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3 JAUNE"
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "13-20Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #12
#0.Output Signal -> Channel Selector "CP3; C5; C3; FC3; C1"
  Channel List = CP3; C5; C3; FC3; C1
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3 JAUNE"
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "21-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 21
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #18
Lua Stimulator => #19
  Lua Script = C:/Users/lilux/Desktop/BETALOWHIGH2/lua_files/6_neurofeedback.lua
  pre_trial_baseline_duration = 3
  instruction_duration = 3
  nb of blocks = 3
  nb of trials per block = 3
  inter block duration = 60
  breakPostTrial min duration = 2
  breakPostTrial max duration = 4
  neurofeedback trial duration = 24
  initial FB wait duration = 1.5
-> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/lilux/Desktop/BETALOWHIGH2/images/cross.png
  Stimulation 1 = OVTK_StimulationId_VisualStimulationStart
  Cue Image 2 = C:/Users/lilux/Desktop/BETALOWHIGH2/images/ObserverF9E5D4.png
  Stimulation 2 = OVTK_StimulationId_Label_0A
  Cue Image 3 = C:/Users/lilux/Desktop/BETALOWHIGH2/images/Imiter.png
  Stimulation 3 = OVTK_StimulationId_Label_0B
  Cue Image 4 = C:/Users/lilux/Desktop/BETALOWHIGH2/images/Imaginer.png
  Stimulation 4 = OVTK_StimulationId_Label_0C
  Cue Image 5 = C:/Users/lilux/Desktop/BETALOWHIGH2/images/remplir_questionnaire.png
  Stimulation 5 = OVTK_StimulationId_Label_1E
  Cue Image 6 = C:/Users/lilux/Desktop/BETALOWHIGH2/images/temp_FB_performance.png
  Stimulation 6 = OVTK_StimulationId_Label_1F
#19 -> Stimulation listener
  Log level to use = Information
#19 -> Player Controller "stopExperiment_recording"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input stimulations=#19 -> 0x341d3912 LSL Export to Arduino (sends all stim)
  Stream name = type
  Stream type = EEGArduino
Input stream=#12, Stimulations stream=#19 -> CSV File Writer low
  Filename = C:/Users/lilux/Desktop/BETALOWHIGH2/csv_files/NF1_rest_jaune_low.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input stream=#18, Stimulations stream=#19 -> CSV File Writer low
  Filename = C:/Users/lilux/Desktop/BETALOWHIGH2/csv_files/NF1_rest_jauneC3_high.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input stream=#6, Stimulations stream=#19 -> CSV File Writer high
  Filename = C:/Users/lilux/Desktop/BETALOWHIGH2/csv_files/NF1_rest_jaune_high.csv
  Precision = 10
  Append data = false
  Only last matrix = false

0x341d3912 LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> 0x341d3912 Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"
