OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "FC5; CP1; C3; FC1; CP5"
  Channel List = FC5; CP1; C3; FC1; CP5
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3" => #2
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
Data=#2 -> Signal display "laplacian signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Stimulations -> Identity => #4
Lua Stimulator => #5
  Lua Script = ${__volatile_ScenarioDir}/lua_files/5_thresholdDetermination.lua
  baseline_start_duration = 15
  instruction_duration = 3
-> Stimulation listener
  Log level to use = Information
#5 -> Player Controller "stopExperiment_recording"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input stream 2=#0.Signal stream, Input stream 3=#5 -> Generic stream writer
  Filename = ${__volatile_ScenarioDir}/../rawdata/5_thresholdDetermination_[$core{date}-$core{time}].ov
  Use compression = false
#5 -> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${__volatile_ScenarioDir}/images/cross.png
  Stimulation 1 = OVTK_StimulationId_VisualStimulationStart
  Cue Image 2 = ${__volatile_ScenarioDir}/images/ObserverF9E5D4.png
  Stimulation 2 = OVTK_StimulationId_Label_0A
  Cue Image 3 = ${__volatile_ScenarioDir}/images/Imiter.png
  Stimulation 3 = OVTK_StimulationId_Label_0B
  Cue Image 4 = ${__volatile_ScenarioDir}/images/Imaginer.png
  Stimulation 4 = OVTK_StimulationId_Label_0C
Input signal=#2, Input stimulations=#5 -> Stimulation based epoching "baseline epoching"
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_BaselineStart
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "20-30Hz (CHECK IT)"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 20
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #14
-> 0x341d3912 Matrix Display "mediane baseline"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
mediane=#14, Stimulations stream=#4 -> CSV File Writer "mediane_fileWriter sujet"
  Filename = ${__volatile_ScenarioDir}/csv_files/5_tableau_moyennes.csv
  Precision = 3
  Append data = false
  Only last matrix = false
mediane=#14, Stimulations stream=#4 -> 0x341d3912 CSV File Writer "mediane_fileWriter temp"
  Filename = ${__volatile_ScenarioDir}/csv_files/5_tableau_moyennes.csv
  Precision = 3
  Append data = false
  Only last matrix = false
#5 -> 0x341d3912 Run python threshold computation
  Stimulation 1 = OVTK_GDF_End_Of_Session
  Command 1 = "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/5_thresholdDetermination.py
Input signal=#2, Input stimulations=#5 -> LSL Export to Arduino (sends all stim)
  Stream name = type
  Stream type = EEG

LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"
