OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  CHANGER LES LSL EXPORT et le fait d'envoyer sinus pour donnees C3

LSL Trigger Manager
  Lua Script = ${__volatile_ScenarioDir}/lua_files/LSL_trigger_manager.lua
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "C:/Users/brainamp/AppData/Local/Programs/Python/Python311/python.exe" "${__volatile_ScenarioDir}/python_scripts/arduino_OV.py"

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Baseline - Rest with eyes Opened => #3
  Lua Script = ${__volatile_ScenarioDir}/lua_files/1_restingState.lua
  baseline duration = 15
  pause_duration = 10
  duree_instruction = 3
-> Stimulation listener
  Log level to use = Information
#3 -> Player Controller "stopExperiment_recording"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#3 -> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${__volatile_ScenarioDir}/images/cross.png
  Stimulation 1 = OVTK_StimulationId_VisualStimulationStart
  Cue Image 2 = ${__volatile_ScenarioDir}/images/instruction_repos.png
  Stimulation 2 = OVTK_StimulationId_Label_0D
  Cue Image 3 = ${__volatile_ScenarioDir}/images/temp_instruction_bouger.png
  Stimulation 3 = OVTK_GDF_Artifact_Movement
Input stream 1=#2.Experiment information, Input stream 2=#2.Signal stream, Input stream 3=#3, Input stream 4=#2.Stimulations -> Generic stream writer
  Filename = ${__volatile_ScenarioDir}/../rawdata/8_restingState_[$core{date}-$core{time}].ov
  Use compression = false
Simulated data => #8
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input signal=#8, Input stimulations=#3 -> LSL Export to Arduino (sends all stim)
  Stream name = type
  Stream type = EEG
