OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "FC5; CP1; C3; FC1; CP5"
  Channel List = FC5; CP1; C3; FC1; CP5
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3"
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Time based epoching "1s epoch with 0.75s overlap"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.25
-> Temporal filter "13-30Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "squared signal"
  Equation = x*x
-> Signal average => #6
Maestro => #7
  Lua Script = ${__volatile_ScenarioDir}/lua_files/6b_gonogo.lua
  baseline duration = 3
  duree_instruction = 3
Input signal=#6, Input stimulations=#7 -> Export signal Unity
  Stream name = type
  Stream type = EEG
Streamed matrix=#0.Signal stream, Input stimulation channel=#7 -> BrainVision Format file writer (Gipsa)
  Header filename = ${__volatile_ScenarioDir}/../rawdata/gonog.vhdr
  Binary format = INT_16
#7 -> Stimulation listener
  Log level to use = Information
